PsychoPy2experiment version="2024.2.4"
Settings
  expName = nBack
  Audio lib = ptb
  runMode = 0
  Experiment info = {"participant":""}
  Monitor = Dell
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1920,1080]
  Units = pix
  color = $(-1.0000, -1.0000, -1.0000)
  measureFrameRate = False
  frameRate = 240
  Data filename = u'data/%s_%s_%s' % (expInfo['participant'], expName, data.getDateStr(format="%d-%m-%Y-%H%M"))
  Data file delimiter = comma
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  Save psydat file = False
  logging level = debug
  consoleLoggingLevel = debug
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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  Routine Intro
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible=False
        import serial
        import string
        import numpy as np
        from psychopy import visual, monitors
        import datetime
        import random
        import scipy.stats as ss
        import statistics
        import time
        from pylsl import StreamInfo, StreamOutlet, local_clock

        # Create marker stream for Lab Streaming Layer
        info = StreamInfo(name='PsychoPy Markers', type='Markers', channel_count=1,nominal_srate=0,
                          channel_format='string', source_id=expInfo['participant'])
        outlet = StreamOutlet(info)  # Broadcast the stream.

        # Set experiment variables
        Resolution = (win.monitor.getSizePix())
        msg='doh!'#if this comes up we forgot to update the msg!
        FrameRate = 60
        DRT_Instance=0
        duration=120 # in seconds
        drt_running=False
        Stimulus="LED"

        # Functions required for timing
        def reset_drt_epoch(ser, timeout_s=1.0):
        	ser.reset_input_buffer();
        	old_timeout = ser.timeout;
        	ser.timeout = 0.01;

        	try:
        		t_send_ns = time.perf_counter_ns();
        		ser.write(b"resettimer\n");
        		ser.flush();

        		deadline_ns = t_send_ns + int(timeout_s * 1_000_000_000);

        		while time.perf_counter_ns() < deadline_ns:
        			raw = ser.readline();

        			# Capture immediately after the serial read returns.
        			t_recv_ns = time.perf_counter_ns();
        			t_recv_lsl = local_clock();

        			if not raw:
        				continue

        			line = raw.decode("utf-8", "replace").rstrip("\r\n");

        			if line.startswith("timer_reset>"):
        				board_tick = int(line.split(">", 1)[1].strip());

        				# Estimated PC perf_counter time when the board reset occurred.
        				anchor_pc_ns = (t_send_ns + t_recv_ns) // 2;

        				# Same estimated instant expressed in the LSL clock.
        				anchor_lsl = (
        					t_recv_lsl
        					- (t_recv_ns - anchor_pc_ns) / 1_000_000_000
        				);

        				return (
        					anchor_pc_ns,
        					anchor_lsl,
        					board_tick,
        					t_recv_ns - t_send_ns,
        				);

        	finally:
        		ser.timeout = old_timeout;

        	raise RuntimeError("Timed out waiting for timer_reset acknowledgement");

        DRT_PREFIX = "dta>DRT, SFT,";

        def round_us_to_ms(value_us):
        	if value_us < 0:
        		return -((-value_us + 500) // 1000);
        	return (value_us + 500) // 1000;


        def parse_dta(line):
        	if not line.startswith(DRT_PREFIX):
        		return None

        	fields = [
        		value.strip()
        		for value in line[len(DRT_PREFIX):].split(",")
        	];

        	if len(fields) < 8:
        		raise ValueError("Incomplete DRT data line: {!r}".format(line));

        	onset_ms = int(fields[0]);
        	offset_ms = int(fields[1]);
        	unix = int(fields[2]);
        	trial = int(fields[3]);
        	stimulus = fields[4];

        	# Firmware order: RT, then Clicks.
        	rt_ms = int(fields[5]);
        	clicks = int(fields[6]);
        	isi_ms = int(fields[7]);

        	# Backward-compatible fallback for older firmware.
        	onset_us = int(fields[8]) if len(fields) > 8 else onset_ms * 1000;
        	offset_us = int(fields[9]) if len(fields) > 9 else offset_ms * 1000;

        	if len(fields) > 10:
        		rt_us = int(fields[10]);
        	else:
        		rt_us = -1 if rt_ms < 0 else rt_ms * 1000;

        	return {
        		"onset_ms": onset_ms,
        		"offset_ms": offset_ms,
        		"unix": unix,
        		"trial": trial,
        		"stimulus": stimulus,
        		"rt_ms": rt_ms,
        		"clicks": clicks,
        		"isi_ms": isi_ms,
        		"onset_us": onset_us,
        		"offset_us": offset_us,
        		"rt_us": rt_us,
        	}

        def reset_epoch_with_rtt(ser, repeats=10, timeout_s=0.5):
        	records = []
        	old_timeout = ser.timeout
        	ser.timeout = 0.01

        	try:
        		for i in range(repeats):
        			ser.reset_input_buffer()

        			t_send_ns = time.perf_counter_ns()
        			ser.write(b"resettimer\n")
        			ser.flush()

        			deadline_ns = t_send_ns + int(timeout_s * 1e9)
        			record = None

        			while time.perf_counter_ns() < deadline_ns:
        				raw = ser.readline()

        				t_recv_ns = time.perf_counter_ns()
        				t_recv_lsl = local_clock()

        				if not raw:
        					continue

        				line = raw.decode("utf-8", "replace").rstrip("\r\n")

        				if not line.startswith("timer_reset>"):
        					continue

        				board_tick = int(line.split(">", 1)[1].strip())

        				anchor_pc_ns = (t_send_ns + t_recv_ns) // 2
        				anchor_lsl = (
        					t_recv_lsl
        					- (t_recv_ns - anchor_pc_ns) / 1e9
        				)

        				record = {
        					"index": i,
        					"send_ns": t_send_ns,
        					"receive_ns": t_recv_ns,
        					"rtt_ns": t_recv_ns - t_send_ns,
        					"board_tick": board_tick,
        					"anchor_pc_ns": anchor_pc_ns,
        					"anchor_lsl": anchor_lsl,
        				}

        				records.append(record)
        				break

        				if record is None:
        					raise TimeoutError("No timer_reset response on repetition {}".format(i))

        		rtts_ms = [r["rtt_ns"] / 1e6 for r in records]

        		print(
        			"DRT reset RTT: median={:.3f} ms, "
        			"min={:.3f} ms, max={:.3f} ms".format(
        				statistics.median(rtts_ms),
        				min(rtts_ms),
        				max(rtts_ms),
        			)
        		)

        		# Only the final reset anchor is valid because each reset
        		# restarts the board's experiment timer.
        		final = records[-1]

        		return (
        			final["anchor_pc_ns"],
        			final["anchor_lsl"],
        			records,
        		)

        	finally:
        		ser.timeout = old_timeout
      Begin Routine:
        win.mouseVisible=False # hide mouse

        # Check which COM port is available and establish initial DRT connection
        # NB Experiment will crash if no DRT found
        detected=False
        import serial.tools.list_ports
        ports = list(serial.tools.list_ports.comports())
        ser = serial.Serial()
        ser.baudrate = 115200  # Try increasing to 115200 for faster communication
        ser.timeout=0.5
        ser.write_timeout=0.5
        ser.exclusive=1
        for p in ports:
            if 'USB Serial Device' in p.description:
                DRT_index=p
                print('DRT Connected to ' + str(p))
                # Connection to port
                ser.port = p.device
                detected=True
                break
        if detected==False:
            #core.quit()
            print("DRT NOT DETECTED")
        if (detected==True):
            print("Detected")
            ser.open()
            time.sleep(.5)
            # Send config commands
            commands = [
                b'HS:VIB,0\n',
                b'HS:LED,0\n',
                b'HS:AUD,0\n',
                b'AUD:L,20\n',
                b'VIB:L,40\n',
                b'LED:L,10\n',
            ]

            for cmd in commands:
                ser.reset_input_buffer()  # Clear old data before sending
                start_time = time.perf_counter()  # Record the time before sending
                ser.write(cmd)
                ser.flush()  # Ensure command is fully sent

                while True:
                    response = ser.readline().decode("utf-8").strip()
                    if response == "ACK":  # Wait specifically for "ACK"
                        break
                    if time.perf_counter() - start_time > 0.5:  # Failsafe timeout
                        break
                    time.sleep(0.05)  # Small delay to prevent CPU overuse
            # Turn light on and off to show the communication is working
            ser.write(b'LED.H\n')
            time.sleep(5)
            ser.write(b'LED.H\n')
            time.sleep(0.5)
            # From run of repeats=100: DRT reset RTT: median=2.595 ms, min=2.067 ms, max=3.102 ms
            initial_timestamp, initial_lsl_timestamp, reset_records = (reset_epoch_with_rtt(ser, repeats=100))
            ser.close()
      End Routine:
        outlet.push_sample(
        	["DRTStart"],
        	timestamp=initial_lsl_timestamp,
        )
        print("StartingDRT")
    TextComponent Welcome1
      startVal [time (s)] = 0.0
      saveStartStop = False
      letterHeight = 35
      wrapWidth = 1800
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      text:
        Welcome! Thank you for participating in this experiment.

        This experiment will consist of two types of task.

        The first task tests your memory. A series of letters will be presented on the screen, one at a time. Your job is to remember the letters. After each letter, your job is to determine whether it is the same as the letter that appeared a certain number of presentations back. We'll call this number N. So, if you see a letter "A" and the letter "A" also appeared N presentations back, you should respond "same". If the letter N digits back was not "A", you would not respond.

        In this experiment, N will be either 2 or 4. You will be told the N at the start of a block, and it will not change for that block.

        Let's do some practice!

        To move to the next screen, press spacebar.
    KeyboardComponent key_resp_23
      startVal [time (s)] = 0.2
      forceEndRoutine = True
      allowedKeys = 'space'
      store = nothing
      saveStartStop = False
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  Routine Break
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    TextComponent BlankForBreak
      startVal [time (s)] = 0.0
      units = norm
      saveStartStop = False
      letterHeight = 0.1
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      text:
        Take a break.
    KeyboardComponent X_to_skip_break
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = 'space'
      store = nothing
      saveStartStop = False
      syncScreenRefresh = False
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    TextComponent text_3
      startVal [time (s)] = 0
      units = norm
      saveStartStop = False
      letterHeight = 0.1
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      text:
        Press space to begin next block.
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        if "Practice" not in Stimulus:
            if not trials.thisN == (break_after-1):
                continueRoutine=False
      End Routine:
        if ser.in_waiting:
            tmp = ser.readline().decode("utf-8")[:-1] # Exclude first three chars and last carriage return, just to clean it up for file
            if tmp[0:3]=="dta":
                nextontime = (time.perf_counter_ns()-initial_timestamp) // 1000000 # Onset of next trial comes immediately after datline
                extracted_data = tmp.replace('dta>DRT, SFT,', '').split(',')
                onset = int(extracted_data[0].strip())
                offset = int(extracted_data[1].strip())
                unix = int(extracted_data[2].strip())
                trial = int(extracted_data[3].strip())
                stim = extracted_data[4].strip()
                rt = int(extracted_data[5].strip())
                clicks = int(extracted_data[6].strip())
                isi = int(extracted_data[7].strip())
                lag=ontime - onset
                outlet.push_sample([stim],timestamp=local_clock()-(local_clock()-(onset-lag)*1000))
                dat.write(str(ontime) +  ',' + str(onset) + ',' + str(offset) + ',' + str(unix) + ',' + str(trial) + ',' + str(stim) + ',' + str(rt) + ',' + str(clicks) + ',' + str(isi) + ',' + str(Block) + ','  + expInfo['participant'] + ',' + str(lag) + '\n' )
                ontime = nextontime
            if tmp[0:3]=="tim":
                board_time = int(tmp.split(">")[1].split(",")[0].strip())  # Extract DRT-reported time
                pc_time = (time.perf_counter_ns() - initial_timestamp) // 1000000  # Convert to ms
                drift = pc_time - board_time  # Compare PC vs. DRT time
                print(f'DRT time: {board_time} ms, PC time: {pc_time} ms, Drift: {drift} ms')
  Routine BlockIntro
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    TextComponent BlockIntroTextLower
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      saveStartStop = False
      letterHeight = 45
      wrapWidth = 1800
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      text [set every repeat]:
        $'The following block will be a ' + str(n) + '-back task. You must decide if each letter is the same as the letter presented ' + str(n) + ' trials ago.\nYou will be responding to the ' + str(Stimulus) + ' DRT.\nThe Block will automatically begin shortly, but you can press space to begin when you are ready.'
    KeyboardComponent key_resp_blockintro
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      forceEndRoutine = True
      allowedKeys = 'space'
      store = nothing
      saveStartStop = False
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        practice=False
        if isinstance(Block, (int, float)):  # Check if Block is a number
            Block += 1  # Increment only in the full experiment
        presentedLetters=[]
        if drt_running==True:
            ser.write(b'stop\n')
            drt_running==False

        thisExp.saveAsWideText(thisExp.dataFileName+'_backup.csv', delim=',',fileCollisionMethod='overwrite')
        outlet.push_sample([f"BlockStart-{Block}"],timestamp=local_clock())
  Routine FullFinish
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    TextComponent BlockFinishText_2
      startVal [time (s)] = 0.0
      saveStartStop = False
      letterHeight = 55
      wrapWidth = 1000
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      text:
        Congratulations, you've finished the experiment!

        Press spacebar to close the experiment.
    KeyboardComponent key_resp_43
      startVal [time (s)] = 0.0
      forceEndRoutine = True
      allowedKeys = 'space'
      store = nothing
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    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        ser.close()
        outlet2.push_sample([f"ExpEnd"],timestamp=local_clock())
  Routine Fixation
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    TextComponent text_2
      startVal [time (s)] = .5
      stopVal [duration (s)] = .5
      units = pix
      saveStartStop = False
      text = +
      letterHeight = 15
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    PolygonComponent Border_Fixation
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      fillColor = None
      lineColor = $[1,0,0]
      size = (ScreenW, ScreenH)
      units = pix
      shape = rectangle
      saveStartStop = False
      lineWidth = 3
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  Routine DRT_Setup
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if (detected==True):
        	print("running setup")
        	run_DRT=True
        	DRT_Instance += 1
        	DRT_Trial=1

        	if DRT_Instance == 1:
        		ser.open()
        		dat = open('data\%s_%s_%s-DRT.csv' % (expInfo['participant'],expName,data.getDateStr(format="%d-%m-%Y-%H%M")),'w')
        		dat.write("OnsetTimePC_est_ms,OnsetTimeDRT_ms,EndTimeDRT_ms,UnixEpoch,TrialNo,Stimulus,RT_ms,Clicks,ISI_ms,Block,ParticipantID,SerialAge_ms,OnsetTimeDRT_us,EndTimeDRT_us,RT_us\n")

        	# Write commands to DRT unit (add sleep between each)
        	if 'Tactile' in Stimulus:
        		commands = [
        		b'WS:LED,0\n',
        		b'WS:VIB,100\n',
        		b'WS:AUD,0\n',
        		b'HMS:2,0\n',
        		b'HMS:1,100\n',
        		b'HMS:3,0\n',
        		b'HMS:0,0\n'
        		]
        	elif 'LED' in Stimulus:
        		commands = [
        		b'WS:LED,100\n',
        		b'WS:VIB,0\n',
        		b'WS:AUD,0\n',
        		b'HMS:2,0\n',
        		b'HMS:1,100\n',
        		b'HMS:3,0\n',
        		b'HMS:0,0\n',
        		b'ISI:L,1000\n',
        		b'ISI:H,1000\n',
        		b'STM:DUR,100\n'
        		]
        	elif 'Auditory' in Stimulus:
        		commands = [
        		b'WS:LED,0\n',
        		b'WS:VIB,0\n',
        		b'WS:AUD,100\n',
        		b'HMS:2,0\n',
        		b'HMS:1,100\n',
        		b'HMS:3,0\n',
        		b'HMS:0,0\n'
        		]

        	for cmd in commands:
        		ser.reset_input_buffer()  # Clear old data before sending
        		start_time = time.perf_counter()  # Record the time before sending
        		ser.write(cmd)
        		ser.flush()  # Ensure command is fully sent

        		while True:
        			response = ser.readline().decode("utf-8").strip()
        			if response == "ACK":  # Wait specifically for "ACK"
        				break
        			if time.perf_counter() - start_time > 0.5:  # Failsafe timeout
        				break
        			time.sleep(0.05)  # Small delay to prevent CPU overuse

        continueRoutine=False
  Routine Intro3
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    TextComponent IntroDRT
      startVal [time (s)] = 0.0
      saveStartStop = False
      letterHeight = 35
      wrapWidth = 1800
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      text:
        Great work!

        Your other task throughout this session is to detect a number of stimuli that might be presented while the tracking task is ocurring. We call this second task the "detection task". The detection task can consist of a light (positioned above your monitor), or a vibration (through the buzzer on your collarbone).

        Whenever you detect any of these stimuli you should press the button on your left hand as soon as possible.

        To move to the next screen, press spacebar.
    KeyboardComponent key_resp_25
      startVal [time (s)] = 0.2
      forceEndRoutine = True
      allowedKeys = 'space'
      store = nothing
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    CodeComponent code_18
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample([f"BlockEnd-{Block}"],timestamp=local_clock())
  Routine Intro4
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    TextComponent IntroDRT2
      startVal [time (s)] = 0.0
      saveStartStop = False
      letterHeight = 35
      wrapWidth = 1800
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      text:
        Let's practice the detection task.

        Focus on the cross in the middle of the screen. For a period of 60 seconds, the light or vibration stimuli will randomly appear. You should press the button as quickly as possible whenever you notice them.

        To begin the detection practice, press spacebar.
    KeyboardComponent key_resp_26
      startVal [time (s)] = 0.2
      forceEndRoutine = True
      allowedKeys = 'space'
      store = nothing
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        Stimulus="LED"
        TrialLengthPractice=60
        Block="Practice_DRT"
        outlet.push_sample([f"BlockStart-{Block}"],timestamp=local_clock())
  Routine practice_DRT
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    TextComponent fixation_DRT
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      saveStartStop = False
      text = +
      letterHeight = 25
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    CodeComponent DRT_Code_Practice
      Code Type = Auto->JS
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      Begin Routine:
        Block=0
        if (detected==True):
        	print("Beginning Routine")
        	ser.write(b'resettimer\n')
        	(initial_timestamp,
        	  initial_lsl_timestamp,
        	  reset_board_tick,
        	  reset_rtt_ns,
        	) = reset_drt_epoch(ser)

        	print("DRT reset RTT: {:.3f} ms".format(reset_rtt_ns / 1e6))

        	outlet.push_sample(
        	  ["DRTStart"],
        	  timestamp=initial_lsl_timestamp,
        	)
      Each Frame:
        if (detected==True):
        	# This loop collects each DRT trial and saves to the csv we created
        	CurrentTimer=(time.perf_counter_ns()-initial_timestamp) // 1000000000
        	if frameN == FrameRate:
        		ser.write(b"start\n")
        		ser.flush()
        		drt_running = True

        	if drt_running and ser.in_waiting and CurrentTimer<=duration:
        		raw = ser.readline()

        		read_ns = time.perf_counter_ns()
        		read_lsl = local_clock()

        		line = raw.decode("utf-8", "replace").rstrip("\r\n")

        		if line.startswith(DRT_PREFIX):
        			record = parse_dta(line)

        			pc_elapsed_us = (
        				read_ns - initial_timestamp
        			) // 1000

        			# This is serial/read age, not a calibrated clock offset.
        			serial_age_us = pc_elapsed_us - record["onset_us"]

        			# Equivalent to the old correction, but now without ontime/lag.
        			onset_timestamp = (
        				read_lsl - serial_age_us / 1_000_000
        			)

        			outlet.push_sample(
        				["{}_ON".format(record["stimulus"])],
        				timestamp=onset_timestamp,
        			)

        			if record["rt_us"] >= 0:
        				outlet.push_sample(
        					["{}_RESP".format(record["stimulus"])],
        					timestamp=(
        						onset_timestamp
        						+ record["rt_us"] / 1_000_000
        					),
        				)
        			else:
        				# Preserves current behavior: MISS is placed at offset_us.
        				miss_timestamp = (
        					read_lsl
        					- (
        						pc_elapsed_us - record["offset_us"]
        					) / 1_000_000
        				)

        				outlet.push_sample(
        					["{}_MISS".format(record["stimulus"])],
        					timestamp=miss_timestamp,
        				)

        			ontime = round_us_to_ms(record["onset_us"])
        			lag = round_us_to_ms(serial_age_us)

        			dat.write(
        				"{},{},{},{},{},{},{},{},{},{},{},{},{},{},{}\n".format(
        					ontime,
        					record["onset_ms"],
        					record["offset_ms"],
        					record["unix"],
        					record["trial"],
        					record["stimulus"],
        					record["rt_ms"],
        					record["clicks"],
        					record["isi_ms"],
        					Block,
        					expInfo["participant"],
        					lag,
        					record["onset_us"],
        					record["offset_us"],
        					record["rt_us"],
        				)
        			)

        		elif line.startswith("timer_check>"):
        			print(line)
        if CurrentTimer>duration:
        	continueRoutine=False
      End Routine:
        if (detected==True):
            ser.write(b'stop\n')
        drt_running=False
  Routine Intro5
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    TextComponent IntroPractice
      startVal [time (s)] = 0.0
      saveStartStop = False
      letterHeight = 35
      wrapWidth = 1800
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      text:
        Great work!

        For the rest of the experiment, you will perform both the memory and the detection tasks together. At the beginning of each block, you will be told the level of N for the memory task and the stimulus you are responding to.

        Try to perform well on both tasks, remembering the sequence of letters while responding as quickly as possible to the detection task.

        You will do one final practice of the memory and detection tasks together, of N=2 then N=4.

        To move to the next screen, press spacebar.
    KeyboardComponent key_resp_27
      startVal [time (s)] = 0.2
      forceEndRoutine = True
      allowedKeys = 'space'
      store = nothing
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample([f"BlockEnd-{Block}"],timestamp=local_clock())
        Stimulus="LED"
        Block="Practice_Final"
        outlet.push_sample([f"BlockStart-{Block}"],timestamp=local_clock())
  Routine Intro6
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    TextComponent IntroFull
      startVal [time (s)] = 0.0
      saveStartStop = False
      letterHeight = 35
      wrapWidth = 1800
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      text:
        Well done!

        You have finished the practice. From here all data will be recorded for analysis. There will be short, timed breaks between blocks. If you need to use the bathroom or rest for any reason, please let the experimenter know now before continuing.

        Good luck! Press space to begin the experimental trials.
    KeyboardComponent key_resp_28
      startVal [time (s)] = 0.2
      forceEndRoutine = True
      allowedKeys = 'space'
      store = nothing
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample([f"BlockEnd-{Block}"],timestamp=local_clock())
        if drt_running==True:
            ser.write(b'stop\n')
            drt_running==False
        Stimulus="LED"
        Block=0
        practice=False
  Routine nback_trial
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible=False
        time_now=datetime.datetime.now()
        letterSelected=False
        # If there haven't been n letters yet, subject should not respond
        if len(presentedLetters) < n:
            Correct='None'
            thisLetter = np.random.choice(letters)
            if (practice==True):
                outlet.push_sample([f"PracNonTarget-{n}"],timestamp=local_clock()+fixation_time+blank_time)
            else:
                outlet.push_sample([f"NonTarget-{n}"],timestamp=local_clock()+fixation_time+blank_time)
        else:
            Correct=CorrectResponse
            # Check whether letter is Target or not and sample a letter that matches the criteria
            if TargetTrial==0:
                if (practice==True):
                    outlet.push_sample([f"PracNonTarget-{n}"],timestamp=local_clock()+fixation_time+blank_time)
                else:
                    outlet.push_sample([f"NonTarget-{n}"],timestamp=local_clock()+fixation_time+blank_time)
                tmp=letters.copy()
                tmp.remove(presentedLetters[-n]) # remove the letter that would be a target from the set
                thisLetter = np.random.choice(tmp)# if this is not a target then randomly choose one of the remaining letters
            else:
                if (practice==True):
                    outlet.push_sample([f"PracTarget-{n}"],timestamp=local_clock()+fixation_time+blank_time)
                else:
                    outlet.push_sample([f"Target-{n}"],timestamp=local_clock()+fixation_time+blank_time)
                thisLetter = presentedLetters[-n]# if this was a target choose the n'th back

        presentedLetters.append(thisLetter)

        thisExp.addData('Letter', thisLetter)
        thisExp.addData("Time", globalClock.getTime())
    TextComponent fixation
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fixation_time
      units = norm
      saveStartStop = False
      text = +
      letterHeight = 0.02
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    TextComponent letter
      startVal [time (s)] = blank_time+fixation_time
      stopVal [duration (s)] = display_time
      units = norm
      saveStartStop = False
      text [set every repeat] = $thisLetter
      letterHeight = 0.1
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    KeyboardComponent key_resp
      startVal [time (s)] = blank_time+fixation_time
      stopVal [duration (s)] = trial_time
      forceEndRoutine = False
      allowedKeys = 'right','None','left','up','down'
      storeCorrect = True
      correctAns = $Correct
      saveStartStop = False
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    CodeComponent DRT
      Code Type = Auto->JS
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      Each Frame:
        if detected and drt_running and ser.in_waiting:
            raw = ser.readline()

            read_ns = time.perf_counter_ns()
            read_lsl = local_clock()

            line = raw.decode("utf-8", "replace").rstrip("\r\n")

            if line.startswith(DRT_PREFIX):
                record = parse_dta(line)

                pc_elapsed_us = (
                    read_ns - initial_timestamp
                ) // 1000

                # This is serial/read age, not a calibrated clock offset.
                serial_age_us = pc_elapsed_us - record["onset_us"]

                # Equivalent to the old correction, but now without ontime/lag.
                onset_timestamp = (
                    read_lsl - serial_age_us / 1_000_000
                )

                outlet.push_sample(
                    ["{}_ON-{}".format(record["stimulus"], n)],
                    timestamp=onset_timestamp,
                )

                if record["rt_us"] >= 0:
                    outlet.push_sample(
                        ["{}_RESP-{}".format(record["stimulus"], n)],
                        timestamp=(
                            onset_timestamp
                            + record["rt_us"] / 1_000_000
                        ),
                    )
                else:
                    # Preserves current behavior: MISS is placed at offset_us.
                    miss_timestamp = (
                        read_lsl
                        - (
                            pc_elapsed_us - record["offset_us"]
                        ) / 1_000_000
                    )

                    outlet.push_sample(
                        ["{}_MISS-{}".format(record["stimulus"], n)],
                        timestamp=miss_timestamp,
                    )

                ontime = round_us_to_ms(record["onset_us"])
                lag = round_us_to_ms(serial_age_us)

                dat.write(
                    "{},{},{},{},{},{},{},{},{},{},{},{},{},{},{}\n".format(
                        ontime,
                        record["onset_ms"],
                        record["offset_ms"],
                        record["unix"],
                        record["trial"],
                        record["stimulus"],
                        record["rt_ms"],
                        record["clicks"],
                        record["isi_ms"],
                        Block,
                        expInfo["participant"],
                        lag,
                        record["onset_us"],
                        record["offset_us"],
                        record["rt_us"],
                    )
                )

            elif line.startswith("timer_check>"):
                print(line)
  Routine nback_practicetrial
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        letterSelected=False
        time_now=datetime.datetime.now()

        # If there haven't been n letters yet, subject should not respond
        if len(presentedLetters) < n_prac:
            Correct='None'
            thisLetter = np.random.choice(letters)
            outlet.push_sample([f"PracNonTarget-{n_prac}"],timestamp=local_clock()+.75)
        else:
            Correct=CorrectResponse
            # Check whether letter is Target or not and sample a letter that matches the criteria
            if TargetTrial==0:
                outlet.push_sample([f"PracNonTarget-{n_prac}"],timestamp=local_clock()+.75)
                tmp=letters.copy()
                tmp.remove(presentedLetters[-n_prac]) # remove the letter that would be a target from the set
                thisLetter = np.random.choice(tmp)# if this is not a target then randomly choose one of the remaining letters
            else:
                outlet.push_sample([f"PracTarget-{n_prac}"],timestamp=local_clock()+.75)
                thisLetter = presentedLetters[-n_prac]# if this was a target choose the n'th back

        #audio_file="Audio\%s.wav" %thisLetter
        presentedLetters.append(thisLetter)

        thisExp.addData('Letter', thisLetter)
        win.mouseVisible=False
        thisExp.addData("Time", globalClock.getTime())
    TextComponent fixation_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fixation_time
      units = norm
      saveStartStop = False
      text = +
      letterHeight = 0.02
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    TextComponent letter_2
      startVal [time (s)] = blank_time+fixation_time
      stopVal [duration (s)] = practice_trial_time
      units = norm
      saveStartStop = False
      text [set every repeat] = $thisLetter
      letterHeight = 0.1
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    KeyboardComponent practice_resp
      startVal [time (s)] = blank_time+fixation_time
      stopVal [duration (s)] = practice_trial_time
      forceEndRoutine = False
      allowedKeys = 'right','None','left','up','down'
      storeCorrect = True
      correctAns = $Correct
      saveStartStop = False
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    TextComponent sequence
      startVal [time (s)] = 0
      stopVal [duration (s)] = blank_time+fixation_time+practice_trial_time
      pos = (0, 0.6)
      units = norm
      saveStartStop = False
      text [set every repeat] = $separator.join(presentedLetters[:-1])
      letterHeight = 0.05
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    TextComponent text_5
      startVal [time (s)] = blank_time+fixation_time
      stopVal [duration (s)] = practice_trial_time
      pos = (0, 0.8)
      units = norm
      saveStartStop = False
      text = right="Same"
      letterHeight = 0.1
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  Routine PracticeBlockIntro
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        # We reset the presented letters each block
        presentedLetters=[]
        n_prac=2
        Block="Practice1"
        outlet.push_sample([f"BlockStart-{Block}"],timestamp=local_clock())
    TextComponent BlockIntroTextLower_2
      startVal [time (s)] = 0.0
      saveStartStop = False
      letterHeight = 45
      wrapWidth = 1800
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      text [set every repeat]:
        $'The following block will be a ' + str(n_prac) + '-back task. You must decide if each letter is the same as the letter presented ' + str(n_prac) + ' letters ago. The sequence of presented letters is displayed at the top of the screen.\nPress space to begin.'
    KeyboardComponent key_resp_4
      startVal [time (s)] = 0.0
      forceEndRoutine = True
      allowedKeys = 'space'
      store = nothing
      saveStartStop = False
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  Routine Feedback_Seq
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    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        if practice_resp.corr:
             msg="Correct!"
        else:
             msg="Oops! That was wrong"
    TextComponent sequence_feedback
      startVal [time (s)] = 0
      stopVal [duration (s)] = feedback_time
      pos = (0, 0.6)
      units = norm
      saveStartStop = False
      text [set every repeat] = $separator.join(presentedLetters[:-1])
      letterHeight = 0.05
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    TextComponent feedback
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = feedback_time
      units = norm
      saveStartStop = False
      text [set every repeat] = $msg
      letterHeight = 0.1
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  Routine Feedback
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    CodeComponent feedback_code_2
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.corr:
             msg="Correct!"
        else:
             msg="Oops! That was wrong"
    TextComponent feedback_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = feedback_time
      units = norm
      saveStartStop = False
      text [set every repeat] = $msg
      letterHeight = 0.1
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  Routine Intro2c
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    TextComponent Welcome3
      startVal [time (s)] = 0.0
      saveStartStop = False
      letterHeight = 35
      wrapWidth = 1800
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      text:
        Great work!

        Now you will practice under experimental conditions. The sequence of letters will no longer be displayed, you must remember the letter that was presented N digits back, and N will change between blocks (either N=2 or N=4). Trials will also be faster. For this practice you will still be provided feedback.

        To begin the next practice trials, press spacebar.
    KeyboardComponent key_resp_29
      startVal [time (s)] = 0.2
      forceEndRoutine = True
      allowedKeys = 'space'
      store = nothing
      saveStartStop = False
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    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample([f"BlockEnd-{Block}"],timestamp=local_clock())
  Routine Intro2b
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    TextComponent Welcome2_3
      startVal [time (s)] = 0.0
      saveStartStop = False
      text = test
      letterHeight = 35
      wrapWidth = 1800
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    KeyboardComponent key_resp_30
      startVal [time (s)] = 0.2
      forceEndRoutine = True
      allowedKeys = 'space'
      store = nothing
      saveStartStop = False
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  Routine Intro2a
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    TextComponent Welcome2
      startVal [time (s)] = 0.0
      saveStartStop = False
      letterHeight = 35
      wrapWidth = 1800
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      text:
        Let's have a practice. We will complete one short block, with N=2.

        For this practice, the sequence of previously displayed letters will be displayed at the top of the screen. The letter furthest to the right will be the previous letter (N=1).

        These practice trials will not time out, and feedback will be provided to help you learn. During the experiment you will need to remember the sequence and trials will time out fairly rapidly.

        For the first N letters you do not need to make any response as there is no "N-back" to compare to. This means in this block, where N=2, you should not press any button until at least the third letter appears.

        On every subsequent letter, you must decide if it is the same as the letter "N back", and if it is, press the RIGHT ARROW key. If it is not the same letter as the one "N back", do not press any buttons, and wait for the next letter.

        Press space to move to the next screen...
    KeyboardComponent key_resp_24
      startVal [time (s)] = 0.2
      forceEndRoutine = True
      allowedKeys = 'space'
      store = nothing
      saveStartStop = False
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  Routine BlockIntro_Practice
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    TextComponent BlockIntroTextLower_3
      startVal [time (s)] = 0.0
      saveStartStop = False
      letterHeight = 45
      wrapWidth = 1800
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      text [set every repeat]:
        $'The following block will be a ' + str(n) + '-back task. You must decide if each letter is the same as the letter presented ' + str(n) + ' trials ago.\nPress space to begin.'
    KeyboardComponent key_resp_blockintro_2
      startVal [time (s)] = 0.0
      forceEndRoutine = True
      allowedKeys = 'space'
      store = nothing
      saveStartStop = False
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if (practice==False):
            Block+=1
        presentedLetters=[]
        Block="Practice2"
        outlet.push_sample([f"BlockStart-{Block}"],timestamp=local_clock())
  Routine DRT_Start
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    TextComponent drt_start
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      saveStartStop = False
      letterHeight = 0.05
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        ser.write(b'resettimer\n')
        initial_timestamp = time.perf_counter_ns()
        outlet.push_sample(['DRTStart'])
      Each Frame:
        if frameN==FrameRate:
            ser.write(b'start\n')# start exp
            ontime = ((time.perf_counter_ns()-initial_timestamp) // 1000000) + 3 # +3 to roughly account for processing time
            drt_running=True
  Routine DRT_Stop
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    TextComponent drt_stop
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      saveStartStop = False
      letterHeight = 0.05
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        ser.write(b'stop\n')
        drt_running=False
      End Routine:
        if ser.in_waiting:
            tmp = ser.readline().decode("utf-8")[:-1] # Exclude first three chars and last carriage return, just to clean it up for file
            if tmp[0:3]=="dta":
                nextontime = datetime.datetime.now() # Onset of next trial comes immediately after datline
                dat.write(str(ontime) +  ',' + tmp[13:(len(tmp) -1)] + ','  + str(DRT_Trial) + ','  + str(Block) + ','  + str(Stimulus) + ','  + str(n) + ',' + expInfo['participant'] +  '\n' )
                ontime = nextontime
                DRT_Trial+=1
  Routine Toilet_break
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    TextComponent text
      startVal [time (s)] = 0.0
      saveStartStop = False
      letterHeight = 45
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      text:
        You may now take a self-paced break. If you need to use the bathroom please let the experimenter know. There may be some time before the next full break.

        When you are ready to begin the next set of trials, please press Spacebar...
    KeyboardComponent key_resp_2
      startVal [time (s)] = 0.0
      forceEndRoutine = True
      allowedKeys = 'space'
      saveStartStop = False
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    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample([f"BlockEnd-{Block}"],timestamp=local_clock())
        if (Block % break_after != 0):
            continueRoutine=False
  Routine MarkersAndCoding
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    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        if (practice==True):
            thisExp.addData('Block', Block)
            thisExp.addData('Time', time_now)
            thisExp.addData('CorrectResp_adj', Correct)
            if (Block=="Practice1"):
                thisExp.addData('Correct', practice_resp.corr)
                if (len(presentedLetters)>n_prac and TargetTrial==1 and practice_resp.corr==1):
                    outlet.push_sample([f"PracTargetResponse-{n_prac}"],timestamp=local_clock()+fixation_time+blank_time+practice_resp.rt)
            else:
                thisExp.addData('Correct', key_resp.corr)
                if (len(presentedLetters)>n and TargetTrial==1 and key_resp.corr==1):
                    outlet.push_sample([f"PracTargetResponse-{n}"],timestamp=local_clock()+fixation_time+blank_time+key_resp.rt)

        else:
            # If a response is made to a target, push a marker
            # NB no point for non-targets as it's a witheld response, and we probably don't care about false alarms
            if (len(presentedLetters)>n and TargetTrial==1 and key_resp.corr==1):
                    outlet.push_sample([f"TargetResponse-{n}"],timestamp=local_clock()+fixation_time+blank_time+key_resp.rt)
            thisExp.addData('Block', Block)
            thisExp.addData('Correct', key_resp.corr)
            thisExp.addData('Time', time_now)
            thisExp.addData('CorrectResp_adj', Correct)
Flow
  Routine Intro
  Routine DRT_Setup
  Routine practice_DRT
  Routine FullFinish
