PsychoPy2experiment version="2026.1.0"
Settings
  Audio lib = sounddevice
  Force stereo = False
  runMode = 0
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1024,768]
  Units = height
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine Intro
    RoutineSettingsComponent Intro
      saveStartStop = False
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    CodeComponent intro_code
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import prefs
        from psychopy import core as pcore
        import sounddevice as sd
        import queue
        import itertools
        import numpy as np
        win.mouseVisible=False
        from pylsl import StreamInfo, StreamOutlet, local_clock
        import psychtoolbox as ptb
        from psychopy import sound
        import random as random
        prefs.hardware['audioLib'] = ['sounddevice']
        prefs.hardware['audioDevice'] = ['default']
        prefs.hardware['audioLatencyMode'] = '1'
        sd.default.samplerate = 48000

        def get_default_wasapi_output():
            hostapis = sd.query_hostapis()

            # Find WASAPI host API
            wasapi_index = None

            for i, host in enumerate(hostapis):
                if "WASAPI" in host["name"]:
                    wasapi_index = i
                    break

            if wasapi_index is None:
                raise RuntimeError("No WASAPI host API found")

            wasapi = hostapis[wasapi_index]

            device = wasapi["default_output_device"]

            if device == -1:
                raise RuntimeError("WASAPI has no default output device")

            info = sd.query_devices(device)

            print("Using WASAPI default:")
            print(f"  Device {device}: {info['name']}")

            return device

        class ScheduledAudio:
            def __init__(
                self,
                samplerate=48000,
                channels=2,
                device=None,
                latency="low"
            ):
                if device is None:
                    device = get_default_wasapi_output()
                device_info = sd.query_devices(device)
                host_info = sd.query_hostapis(device_info["hostapi"])

                if "WASAPI" not in host_info["name"]:
                    raise RuntimeError(
                        f"ScheduledAudio requires a WASAPI device, "
                        f"but device {device} uses {host_info['name']}: "
                        f"{device_info['name']}"
                    )
                self.fs = samplerate
                self.channels = channels
                # Main thread -> audio callback
                self._incoming = queue.SimpleQueue()
                # Audio callback -> main thread
                self._markers = queue.SimpleQueue()
                # Only touched by audio callback
                self._events = []
                self._ids = itertools.count()
                print(
                    f"Audio: {device_info['name']} "
                    f"[{host_info['name']}]"
                )
                self.stream = sd.OutputStream(
                    samplerate=self.fs,
                    channels=self.channels,
                    dtype="float32",
                    device=device,
                    latency=latency,
                    blocksize=0,       # let PortAudio choose optimal buffer size
                    extra_settings=sd.WasapiSettings( exclusive=True),
                    callback=self._callback
                )
                self.stream.start()
                print(
                    f"Actual stream latency: "
                    f"{self.stream.latency * 1000:.2f} ms"
                )
                # Work out relationship between PortAudio's clock and LSL's clock
                self._lsl_minus_pa = self._calibrate_clocks()

            def _calibrate_clocks(self, n=50):
                """
                Estimate:
                    LSL time = PortAudio time + offset
                """
                offsets = []
                for _ in range(n):
                    # bracket stream.time to minimise sampling error
                    lsl1 = local_clock()
                    pa = float(self.stream.time)
                    lsl2 = local_clock()
                    lsl_mid = (lsl1 + lsl2) / 2
                    offsets.append(lsl_mid - pa)
                return float(np.median(offsets))

            def recalibrate(self):
                """
                Fine to call occasionally between trials / blocks.
                """
                self._lsl_minus_pa = self._calibrate_clocks()

            def make_tone(
                self,
                freq,
                duration=0.100,
                amplitude=1,
                ramp_ms=5
            ):
                """
                Generate tone in advance.
                Nothing expensive happens in the audio callback.
                """
                n = int(round(duration * self.fs))
                t = np.arange(n, dtype=np.float64) / self.fs
                wave = amplitude * np.sin(2 * np.pi * freq * t)

                # raised-cosine-ish onset/offset ramp
                ramp_n = int(round(ramp_ms / 1000 * self.fs))
                ramp_n = min(ramp_n, n // 2)

                if ramp_n > 0:
                    x = np.linspace(0, np.pi / 2, ramp_n)
                    ramp = np.sin(x) ** 2
                    wave[:ramp_n] *= ramp
                    wave[-ramp_n:] *= ramp[::-1]
                return wave.astype(np.float32)

            def schedule_tone(
                self,
                freq,
                delay,
                duration=0.100,
                amplitude=1,
                ramp_ms=5,
                label=None
            ):
                """
                Schedule a tone 'delay' seconds from NOW.

                Returns:
                    event_id
                    requested onset in PortAudio time
                    requested onset in LSL time
                """
                wave = self.make_tone(
                    freq=freq,
                    duration=duration,
                    amplitude=amplitude,
                    ramp_ms=ramp_ms
                )
                event_id = next(self._ids)
                now_pa = float(self.stream.time)
                target_pa = now_pa + delay
                event = {
                    "id": event_id,
                    "label": label,
                    "target_pa": target_pa,
                    "wave": wave,
                    "started": False,
                    "pos": 0
                }
                self._incoming.put(event)
                target_lsl = target_pa + self._lsl_minus_pa
                return event_id, target_pa, target_lsl

            def _callback(self, outdata, frames, time_info, status):
                # normally output silence
                outdata.fill(0)
                # PortAudio's estimate of when SAMPLE ZERO of this
                # buffer will hit the DAC
                buffer_start_pa = float(time_info.outputBufferDacTime)
                buffer_end_pa = (
                    buffer_start_pa
                    + frames / self.fs
                )

                # Grab anything the experiment thread scheduled
                while True:
                    try:
                        event = self._incoming.get_nowait()
                        self._events.append(event)
                    except queue.Empty:
                        break

                remaining_events = []
                for event in self._events:
                    wave = event["wave"]
                    # ----------------------------------------
                    # Event hasn't started yet
                    # ----------------------------------------
                    if not event["started"]:
                        # Not in this buffer yet
                        if event["target_pa"] >= buffer_end_pa:
                            remaining_events.append(event)
                            continue
                        # Determine exact sample inside this buffer
                        start_frame = int(round(
                            (event["target_pa"] - buffer_start_pa)
                            * self.fs
                        ))
                        # If scheduling arrived late, start ASAP
                        start_frame = max(0, start_frame)
                        if start_frame >= frames:
                            remaining_events.append(event)
                            continue
                        actual_pa = (
                            buffer_start_pa
                            + start_frame / self.fs
                        )
                        event["started"] = True
                        event["actual_pa"] = actual_pa

                        # Tell main thread exactly where audio started
                        self._markers.put({
                            "id": event["id"],
                            "label": event["label"],
                            "target_pa": event["target_pa"],
                            "actual_pa": actual_pa,
                            "error_s": actual_pa - event["target_pa"]
                        })
                    else:
                        start_frame = 0
                    # ----------------------------------------
                    # Put waveform into output buffer
                    # ----------------------------------------

                    available = frames - start_frame
                    remaining_wave = len(wave) - event["pos"]
                    n = min(available, remaining_wave)
                    if n > 0:
                        segment = wave[
                            event["pos"]:
                            event["pos"] + n
                        ]
                        # same tone into every channel
                        outdata[
                            start_frame:start_frame + n,
                            :
                        ] += segment[:, None]
                        event["pos"] += n
                    # Keep unfinished tones for next callback
                    if event["pos"] < len(wave):
                        remaining_events.append(event)

                self._events = remaining_events
                # safety if multiple sounds overlap
                np.clip(outdata, -1.0, 1.0, out=outdata)

            def drain_markers(self, outlet=None):
                """
                Call this from PsychoPy's main thread every frame.

                Returns events whose audio onset occurred since
                the last call.

                If outlet is supplied, also sends LSL marker
                timestamped to estimated DAC onset.
                """

                result = []
                while True:
                    try:
                        marker = self._markers.get_nowait()
                    except queue.Empty:
                        break

                    marker["lsl_time"] = (
                        marker["actual_pa"]
                        + self._lsl_minus_pa
                    )

                    marker["target_lsl"] = (
                        marker["target_pa"]
                        + self._lsl_minus_pa
                    )

                    if outlet is not None and marker["label"] is not None:
                        outlet.push_sample(
                            [marker["label"]],
                            timestamp=marker["lsl_time"]
                        )

                    result.append(marker)

                return result

            def close(self):
                self.stream.stop()
                self.stream.close()
      Begin Routine:
        # Create marker stream for Lab Streaming Layer
        info = StreamInfo(name='PsychoPy Markers', type='Markers', channel_count=1,nominal_srate=0,
                          channel_format='string', source_id=expInfo['participant'])
        outlet = StreamOutlet(info)  # Broadcast the stream.

        wasapi_device = get_default_wasapi_output()

        audio = ScheduledAudio(
            samplerate=48000,
            channels=2,
            device=wasapi_device
        )
    TextComponent text
      startVal [time (s)] = 0
      saveStartStop = False
      syncScreenRefresh = False
      letterHeight = 0.05
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      text:
        Hello welcome to the experiment.

        We are going to begin with a calibration phase for the EEG headset you are wearing.
        You will complete four cycles of opening and closing your eyes for 60 seconds.

        Press space to proceed to the calibration phase.
    KeyboardComponent key_resp
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = 'space'
      store = nothing
      saveStartStop = False
      syncScreenRefresh = False
      discard previous = False
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  Routine oddball_trial
    RoutineSettingsComponent oddball_trial
      saveStartStop = False
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    TextComponent text2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      saveStartStop = False
      syncScreenRefresh = False
      disabled = True
      text = +
      letterHeight = 0.05
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    CodeComponent code_oddball
      Code Type = Auto->JS
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      Begin Routine:
        isi = np.random.uniform(low=1,high=1.5)
        soa = .2

        tone_id, target_pa, target_lsl = audio.schedule_tone(
            freq=freq,
            delay=soa,
            duration=0.100,
            amplitude=1,
            ramp_ms=5,
            label=f"Oddball-{stim}"
        )
        actual_onset = None
        schedule_error = None
      Each Frame:
        for marker in audio.drain_markers(outlet):
            if marker["id"] == tone_id:
                actual_onset = marker["lsl_time"]
                schedule_error = marker["error_s"]
                post = pcore.getTime()
      End Routine:
        thisExp.addData("isi", isi)
        thisExp.addData("soa", soa)

        thisExp.addData("audio_target_lsl", target_lsl)
        thisExp.addData("audio_actual_lsl", actual_onset)

        if schedule_error is not None:
            thisExp.addData(
                "audio_schedule_error_ms",
                schedule_error * 1000
            )
    DotsComponent dots
      startVal [time (s)] = 0
      stopVal [duration (s)] = $isi
      dotSize = 5
      fieldSize = 1
      fieldPos = [0,0]
      nDots = 50
      dir = 0
      speed = 0.01
      saveStartStop = False
      syncScreenRefresh = False
      coherence = 0.01
      dotLife = 5
      signalDots = different
      refreshDots = repeat
      noiseDots = direction
      fieldShape = circle
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  Routine End
    RoutineSettingsComponent End
      saveStartStop = False
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    CodeComponent code1
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(["ExpEnd"],timestamp=local_clock())
    TextComponent outro
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      text = All finished. Thanks!
      letterHeight = 0.05
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  Routine CloseEyes
    RoutineSettingsComponent CloseEyes
      saveStartStop = False
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    TextComponent text5
      startVal [time (s)] = 0
      saveStartStop = False
      syncScreenRefresh = False
      letterHeight = 0.05
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      text [set every repeat]:
        Please close your eyes for approximately 60 seconds.
        When you open your eyes, press the 'spacebar'.
    CodeComponent code4
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(["CloseEyes_Start"],timestamp=local_clock())
      End Routine:
        outlet.push_sample(["CloseEyes_End"],timestamp=local_clock())
    KeyboardComponent key_resp2
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = 'space'
      store = nothing
      saveStartStop = False
      syncScreenRefresh = False
      discard previous = False
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  Routine OpenEyes
    RoutineSettingsComponent OpenEyes
      saveStartStop = False
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    TextComponent text4
      startVal [time (s)] = 0
      saveStartStop = False
      syncScreenRefresh = False
      letterHeight = 0.05
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      text [set every repeat]:
        Now keep your eyes open, focusing on the cross below this message.
        After approximately 60 seconds, press the 'spacebar'.




        x
    CodeComponent code3
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(["OpenEyes_Start"],timestamp=local_clock())
      End Routine:
        outlet.push_sample(["OpenEyes_End"],timestamp=local_clock())
    KeyboardComponent key_resp2
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = 'space'
      store = nothing
      saveStartStop = False
      syncScreenRefresh = False
      discard previous = False
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  Routine OddballIntro
    RoutineSettingsComponent OddballIntro
      saveStartStop = False
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    TextComponent text5
      startVal [time (s)] = 0
      saveStartStop = False
      syncScreenRefresh = False
      letterHeight = 0.05
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      text:
        The following block requires you to watch a patch of random noise.

        Tones will play through the headphones but you should ignore them.

        Press 'spacebar' to begin.
    KeyboardComponent key_resp
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = 'space'
      store = nothing
      saveStartStop = False
      syncScreenRefresh = False
      discard previous = False
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if blocks.thisN > 0:
            continueRoutine=False;
      End Routine:
        outlet.push_sample([f"BlockStart-{blocks.thisN+1}"],timestamp=local_clock())
  Routine ChoiceIntro
    RoutineSettingsComponent ChoiceIntro
      saveStartStop = False
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    TextComponent text6
      startVal [time (s)] = 0
      saveStartStop = False
      syncScreenRefresh = False
      letterHeight = 0.05
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      text:
        The following block requires you to discriminate two tones.

        When you heart the high pitch tone, press 'space'.
        When you hear the low pitch tone, do not press any button.

        Press space to begin.
    KeyboardComponent key_resp
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = 'space'
      store = nothing
      saveStartStop = False
      syncScreenRefresh = False
      discard previous = False
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    CodeComponent code_choice
      Code Type = Auto->JS
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      Begin Routine:
        if blocks.thisN > 0:
            continueRoutine=False;
      End Routine:
        outlet.push_sample([f"BlockStart-{blocks.thisN+1}"],timestamp=local_clock())
  Routine choice_trial
    RoutineSettingsComponent choice_trial
      saveStartStop = False
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    TextComponent fixation
      startVal [time (s)] = 0
      stopVal [duration (s)] = $soa
      saveStartStop = False
      syncScreenRefresh = False
      text = +
      letterHeight = 0.05
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    CodeComponent code2
      Code Type = Auto->JS
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      Begin Routine:
        isi = np.random.uniform(low=1,high=1)
        soa = np.random.uniform(low=.1,high=.1)

        tone_id, target_pa, target_lsl = audio.schedule_tone(
            freq=freq,
            delay=soa,
            duration=0.100,
            amplitude=1,
            ramp_ms=5,
            label=f"Stim-{stim}"
        )
        actual_onset = None
        schedule_error = None
      Each Frame:
        for marker in audio.drain_markers(outlet):
            if marker["id"] == tone_id:
                actual_onset = marker["lsl_time"]
                schedule_error = marker["error_s"]
                post = pcore.getTime()
      End Routine:
        thisExp.addData("isi", isi)
        thisExp.addData("soa", soa)

        thisExp.addData("audio_target_lsl", target_lsl)
        thisExp.addData("audio_actual_lsl", actual_onset)

        if schedule_error is not None:
            thisExp.addData(
                "audio_schedule_error_ms",
                schedule_error * 1000
            )
    KeyboardComponent choice_resp
      startVal [time (s)] = 0
      stopVal [duration (s)] = $isi
      forceEndRoutine = False
      allowedKeys = 'space'
      storeCorrect = True
      correctAns = $correct
      saveStartStop = False
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  Routine Break
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    TextComponent text7
      startVal [time (s)] = 0
      saveStartStop = False
      syncScreenRefresh = False
      letterHeight = 0.05
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      text:
        Have a short break.

        When you are ready to begin the next set of trials, press the 'spacebar'.
    KeyboardComponent break_key
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = 'space'
      store = nothing
      saveStartStop = False
      syncScreenRefresh = False
      discard previous = False
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    CodeComponent code_break
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample([f"BlockEnd-{blocks.thisN+1}"],timestamp=local_clock())
  Routine sounds
    RoutineSettingsComponent sounds
      saveStartStop = False
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    TextComponent text_sound
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      pos = 0,.2
      saveStartStop = False
      syncScreenRefresh = False
      text [set every repeat] = $tone
      letterHeight = 0.05
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    TextComponent text_blank
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      letterHeight = 0.05
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      text:
        Please listen to the tones as they cycle several times.
        One tone is high pitched, one is low-pitched.
    CodeComponent code_example
      Code Type = Auto->JS
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      Begin Routine:
        tone_id, target_pa, target_lsl = audio.schedule_tone(
            freq=freq,
            delay=0,
            duration=0.100,
            amplitude=1,
            ramp_ms=5,
            label=f"example-{tone}"
        )
        actual_onset = None
        schedule_error = None
      Each Frame:
        for marker in audio.drain_markers(outlet):
            if marker["id"] == tone_id:
                actual_onset = marker["lsl_time"]
                schedule_error = marker["error_s"]
                post = pcore.getTime()
      End Routine:
        thisExp.addData("audio_target_lsl", target_lsl)
        thisExp.addData("audio_actual_lsl", actual_onset)

        if schedule_error is not None:
            thisExp.addData(
                "audio_schedule_error_ms",
                schedule_error * 1000
            )
Flow
  Routine Intro
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    conditionsFile = gng.xlsx
    nReps = 30
    conditions = []
    endPoints = [0,1]
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    Routine choice_trial
  LoopTerminator trials
  Routine End
