PsychoPy2experiment version="2026.1.0"
Settings
  Audio lib = ptb
  runMode = 0
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1024,768]
  Units = height
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine oddball_trial
    RoutineSettingsComponent oddball_trial
      saveStartStop = False
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    TextComponent text2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      saveStartStop = False
      syncScreenRefresh = False
      disabled = True
      text = +
      letterHeight = 0.05
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    CodeComponent code_oddball
      Code Type = Auto->JS
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      Begin Routine:
        isi = np.random.uniform(low=1,high=1.5)
        soa = .2
        mySound.setSound(freq)
        now = ptb.GetSecs()
        mySound.play(when=now+soa)
        outlet.push_sample([f"Oddball-{stim}"],timestamp=local_clock()+soa)
        thisExp.addData('isi',isi)
        thisExp.addData('soa',soa)
    DotsComponent dots
      startVal [time (s)] = 0
      stopVal [duration (s)] = $isi
      dotSize = 5
      fieldSize = 1
      fieldPos = [0,0]
      nDots = 100
      dir = 0
      speed = 0.01
      saveStartStop = False
      syncScreenRefresh = False
      coherence = 0
      dotLife = 3
      signalDots = different
      refreshDots = repeat
      noiseDots = walk
      fieldShape = circle
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  Routine Intro
    RoutineSettingsComponent Intro
      saveStartStop = False
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    CodeComponent intro_code
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible=False
        from pylsl import StreamInfo, StreamOutlet, local_clock
        import psychtoolbox as ptb
        from psychopy import sound
        import random as random
        import numpy as np
        from psychopy import prefs
        prefs.hardware['audioLib'] = ['ptb']
        prefs.hardware['audioLatencyMode'] = '3'
        # Create marker stream for Lab Streaming Layer
        info = StreamInfo(name='PsychoPy Markers', type='Markers', channel_count=1,nominal_srate=0,
                          channel_format='string', source_id=expInfo['participant'])
        outlet = StreamOutlet(info)  # Broadcast the stream.
        mySound = sound.Sound(780,volume=1,stereo=False,secs=0.1)
    TextComponent text
      startVal [time (s)] = 0
      saveStartStop = False
      syncScreenRefresh = False
      text = Hello welcome to the experiment
      letterHeight = 0.05
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    KeyboardComponent key_resp
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = 'space'
      store = nothing
      saveStartStop = False
      syncScreenRefresh = False
      discard previous = False
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  Routine End
    RoutineSettingsComponent End
      saveStartStop = False
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    CodeComponent code4
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(["Oddball_End"],timestamp=local_clock())
    TextComponent outro
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      text = All finished. Thanks!
      letterHeight = 0.05
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  Routine CloseEyes
    RoutineSettingsComponent CloseEyes
      saveStartStop = False
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    TextComponent text5
      startVal [time (s)] = 0
      stopVal [duration (s)] = 70
      saveStartStop = False
      syncScreenRefresh = False
      text [set every repeat] = Close your eyes for 60 seconds.
      letterHeight = 0.05
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    CodeComponent code4
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(["CloseEyes_Start"],timestamp=local_clock())
      End Routine:
        outlet.push_sample(["CloseEyes_End"],timestamp=local_clock())
    KeyboardComponent key_resp2
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = 'space'
      store = nothing
      saveStartStop = False
      syncScreenRefresh = False
      discard previous = False
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  Routine OpenEyes
    RoutineSettingsComponent OpenEyes
      saveStartStop = False
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    TextComponent text4
      startVal [time (s)] = 0
      stopVal [duration (s)] = 70
      saveStartStop = False
      syncScreenRefresh = False
      letterHeight = 0.05
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      text [set every repeat]:
        Open your eyes for 60 seconds looking at this fixation cross:

        x
    CodeComponent code3
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(["OpenEyes_Start"],timestamp=local_clock())
      End Routine:
        outlet.push_sample(["OpenEyes_End"],timestamp=local_clock())
    KeyboardComponent key_resp2
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = 'space'
      store = nothing
      saveStartStop = False
      syncScreenRefresh = False
      discard previous = False
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  Routine OddballIntro
    RoutineSettingsComponent OddballIntro
      saveStartStop = False
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible=False
        from pylsl import StreamInfo, StreamOutlet, local_clock
        import psychtoolbox as ptb
        from psychopy import sound
        import random as random
        import numpy as np
        # Create marker stream for Lab Streaming Layer
        info = StreamInfo(name='PsychoPy Markers', type='Markers', channel_count=1,nominal_srate=0,
                          channel_format='string', source_id=expInfo['participant'])
        outlet = StreamOutlet(info)  # Broadcast the stream.
        mySound = sound.Sound(780,volume=1,stereo=False,secs=0.1)
    TextComponent text6
      startVal [time (s)] = 0
      saveStartStop = False
      syncScreenRefresh = False
      letterHeight = 0.05
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      text:
        The following block requires you to watch this patch of random noise.

        Tones will play but you should ignore them.
    KeyboardComponent key_resp
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = 'space'
      store = nothing
      saveStartStop = False
      syncScreenRefresh = False
      discard previous = False
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  Routine ChoiceIntro
    RoutineSettingsComponent ChoiceIntro
      saveStartStop = False
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible=False
        from pylsl import StreamInfo, StreamOutlet, local_clock
        import psychtoolbox as ptb
        from psychopy import sound
        import random as random
        import numpy as np
        # Create marker stream for Lab Streaming Layer
        info = StreamInfo(name='PsychoPy Markers', type='Markers', channel_count=1,nominal_srate=0,
                          channel_format='string', source_id=expInfo['participant'])
        outlet = StreamOutlet(info)  # Broadcast the stream.
        mySound = sound.Sound(780,volume=1,stereo=False,secs=0.1)
    TextComponent text6
      startVal [time (s)] = 0
      saveStartStop = False
      syncScreenRefresh = False
      letterHeight = 0.05
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      text:
        The following block requires you to discriminate between the two tones.

        When you heart the high pitch tone from the previous block, press 'space'.
        When you hear the low pitch tone from the previous block, do not press any button.

        Press space to begin.
    KeyboardComponent key_resp
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = 'space'
      store = nothing
      saveStartStop = False
      syncScreenRefresh = False
      discard previous = False
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  Routine choice_trial
    RoutineSettingsComponent choice_trial
      saveStartStop = False
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    TextComponent fixation
      startVal [time (s)] = 0
      stopVal [duration (s)] = $soa
      saveStartStop = False
      syncScreenRefresh = False
      text = +
      letterHeight = 0.05
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    CodeComponent code2
      Code Type = Auto->JS
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      Begin Routine:
        isi = np.random.uniform(low=1.5,high=1.8)
        soa = np.random.uniform(low=.15,high=.5)
        mySound.setSound(freq)
        now = ptb.GetSecs()
        mySound.play(when=now+soa)
        outlet.push_sample([f"GnG-{stim}"],timestamp=local_clock()+soa)
        thisExp.addData('isi',isi)
        thisExp.addData('soa',soa)
    KeyboardComponent choice_resp
      startVal [time (s)] = 0
      stopVal [duration (s)] = $isi
      forceEndRoutine = False
      allowedKeys = 'space'
      storeCorrect = True
      correctAns = $correct
      saveStartStop = False
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Flow
  Routine Intro
  LoopInitiator eyes loopType="TrialHandler"
    loopType = sequential
    isTrials = False
    nReps = 4
    conditions = []
    endPoints = [0,1]
    Routine CloseEyes
    Routine OpenEyes
  LoopTerminator eyes
  Routine OddballIntro
  LoopInitiator oddball loopType="TrialHandler"
    loopType = random
    conditionsFile = oddball.xlsx
    nReps = 20
    conditions = []
    endPoints = [0,1]
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    Routine oddball_trial
  LoopTerminator oddball
  Routine ChoiceIntro
  LoopInitiator gng loopType="TrialHandler"
    loopType = fullRandom
    conditionsFile = gng.xlsx
    nReps = 10
    conditions = []
    endPoints = [0,1]
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    Routine choice_trial
  LoopTerminator gng
  Routine End
